PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = wordpriming2024
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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      text [set every repeat]:
        $study_word
    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_a_e
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = studywordspriming - Sheet1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('study_word', 'vase')]),
      OrderedDict([('study_word', 'tiger')]),
      OrderedDict([('study_word', 'book')]),
      OrderedDict([('study_word', 'cushion')]),
      OrderedDict([('study_word', 'piano')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = fragments - Sheet1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('test_a_e', 't_g_r')]),
      OrderedDict([('test_a_e', '_oo_')]),
      OrderedDict([('test_a_e', 'c_s_i_n')]),
      OrderedDict([('test_a_e', '_ia_o')]),
      OrderedDict([('test_a_e', '_ea_o_')]),
      OrderedDict([('test_a_e', 'c_m_r_')]),
      OrderedDict([('test_a_e', '_p_a_d_')]),
      OrderedDict([('test_a_e', '_os_')]),
      OrderedDict([('test_a_e', 'o_a_n_e')])]
    Routine test
  LoopTerminator trials_2
